PsychoPy2experiment version="2022.1.1"
Settings
  Audio latency priority = 0
  Data filename = u'data/%s_%s_%s' % (expInfo['SONA_number'], expName, expInfo['date'])
  Experiment info = {'ID': '', 'Age': '', 'Gender': ''}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1280, 720]
  color = white
  expName = rsvp_EEG_VA
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine loading_stimuli
    CodeComponent code
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        randint = function(min, maxplusone) {
          return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }
  Routine rsvp_setup
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        letters = ['C','D','H','K','N','F','R','S','V','Z']
      Begin Routine:
        length=15
        iNum = 0

        tar_pos=randint(6, 9)
        # fill stream with numbers
        rsvp_list=[]
        while len(rsvp_list) != length:
            iNum = randint(1,9)
            if not rsvp_list:
                rsvp_list.append(iNum)
            elif iNum != rsvp_list[-1]:
                rsvp_list.append(iNum)

        shuffle(letters)
        Critical = letters[0]
        while Critical == previous_target_letter:
            shuffle(letters)
            Critical = letters[0]
        previous_target_letter = Critical
        rsvp_list[tar_pos]=Critical
        rsvpSize = stimulus_size
        counterTrial = 0
  Routine stream
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        thisItem=rsvp_list[counterTrial]
      End Routine:
        counterTrial +=1
    TextComponent stimuli
      color = black
      letterHeight [set every repeat] = rsvpSize
      saveStartStop = False
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 7
      text [set every repeat] = $thisItem
      units = deg
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  Routine Detec_question
    TextComponent question_text
      letterHeight = 0.07
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
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      text:
        Have you seen the target?
    TextComponent arrows2
      letterHeight = 0.07
      pos = [0,-0.3]
      startVal [time (s)] = 0.0
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      text:
        YES                               NO
        <—                                —>
    KeyboardComponent detec_answer
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_11
      Code Type = Auto->JS
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      End Routine:
        counterTrialsurp +=1
  Routine instr_trial
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        if  block == 'semantic':
            continueRoutine= False
        else:
            continueRoutine = True
    TextComponent instr_text
      letterHeight = 0.07
      pos = [0,0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $INSTRUC
      units = height
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    TextComponent target_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $target
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    TextComponent ENTER
      letterHeight = 0.06
      pos = [0,-0.3]
      saveStartStop = False
      startVal [time (s)] = 1.5
      text = Press SPACE BAR when ready
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','space'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      store = nothing
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  Routine fixation
    TextComponent fixation_text
      color = black
      letterHeight [set every repeat] = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
      text = +
      units = deg
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  Routine items_recog
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        list_critical.append(text)
        list_critical2.append(Word)
  Routine lists_recog
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        surprise_instru="Thank you for taking part in this study.\n\n\
        In this study you will be asked to view a series of words one after the other.\
        Your task is to search for a particular word. The experiment consists of several \
        trials, which begin with the instruction “SEARCH FOR THE WORD xxxxx”. \n\
        The target word is different for each trial. Your task is to find the target. \
        At the end of the trial you will be asked “HAVE YOU SEEN THE TARGET?”. \
        To answer “YES” you should press the “LEFT ARROW”(<--), and to answer “NO” you \
        should press the “RIGHT ARROW”(-->). \n\n\n\n\
        All your data, will be kept confidential \
        without your name attached to it and will be used only for this experiment. \n\n\
        This task will last for approximately 25 minutes. If you are willing to take part, \
        please press the “SPACE BAR”.  If you want to leave the experiment at any moment \
        just press “ESCAPE” and close the tab of the experiment in your browser. \n\n\
        You will receive credit for the participation after the completion of the experiment. \n\n\
        Thank you for your time and valuable contribution."
    TextComponent instruc_surprise
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $surprise_instru
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    KeyboardComponent resp_init_exp
      allowedKeys = 'y','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine items_surp
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        list_surprise=[]
      Begin Routine:
        list_surprise.append(ITEM)
  Routine end_block
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        blockCounter=0
      Begin Routine:
        if blockCounter == 0:
            endBlockText='WELL DONE!!\n\
         You have finished the first block.\n\
         The following set of trials are very similar to the previous but this time\
         at the end of the trial you will be presented with a category (e.g. "JOBS")\
         and the question "HAVE YOU SEEN A WORD OF THIS CATEGORY?"\
         You can press (<--) to indicate YES or (-->) to say NO.\n\n\
         Your maint task in each trial is to search for a word of a specific category (e.g. "FURNITURE").\
         When asked about the target your task is to press YES (<--) or NO (-->) to indicate if\
         you have seen a word of the category mentioned at the begining of the trial. For example, if you were instructed to search for an ANIMAL \
         and you see the word "elephant" you should press <-- (when asked about the target) and if you did not see an animal word you just press -->.\
         THIS IS YOUR MAIN TASK, so try to focus on searching\
         for words that might belong to the category.\n\n\
         Press SPACE when ready'


        if blockCounter == 1:
            endBlockText='WELL DONE!!\n\n\
         You have finished the second block.\n\
         The following set of trials are very similar to those of the first block but this time, on some trials,\
         you will be asked to do a recognition test at the end of the trial.\
         You will be presented with one word and the question "HAVE YOU SEEN THIS WORD?".\
         You can press (<--) to indicate YES or (-->) to say NO. \n\
         After the recognition question you will be asked about the target\
         (the word you were instructed to search). This question (about the target) will be presented in every trial\
         and THIS IS YOUR MAIN TASK so try to focus on searching for the target\n\n\
         Press SPACE when ready'

        if blockCounter == 2:
            endBlockText='WELL DONE!!\n\n\
         THIS IS THE END OF THE EXPERIMENT.\n\
         MANY THANKS FOR YOUR CONTRIBUTION\n\n\n\n\
         Press SPACE to end the experiment.'
      End Routine:
        blockCounter += 1
    TextComponent text_end_block
      letterHeight = 0.03
      pos = [0,0.1]
      startVal [time (s)] = 0.0
      text [set every repeat] = $endBlockText
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    KeyboardComponent key_resp
      allowedKeys = 'y','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine colors
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        color = []
      Begin Routine:
        color.append(Colores)
  Routine instruc_practice
    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        instructions_1 = "Thank you for taking part in this study.\n\nIn the following trials, your task will be to recognise a letter presented within a series of numbers, known as a stream. Each trial will begin with a fixation cross + which indicates the centre of the screen where the next stream will appear. \n\nOnce the stream has been presented, you will be asked to enter the letter that you saw. If you did not see a letter, please leave the field blank.\n\n \n\nOnce you have read and understood these instructions please press “ENTER” to continue."
    TextComponent text_instructions1
      color = black
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_1
      units = deg
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    KeyboardComponent key_resp_4
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine end_block_2
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        endBlockText='WELL DONE!!\n\n\
            THIS IS THE END OF THE EXPERIMENT.\n\
            MANY THANKS FOR YOUR CONTRIBUTION\n\n\
            Press SPACE to end the experiment'
    TextComponent text_end
      letterHeight = 0.03
      pos = [0,0.1]
      startVal [time (s)] = 0.0
      text [set every repeat] = $endBlockText
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    KeyboardComponent key_resp_6
      allowedKeys = 'y','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fill6
    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        exp_lures.append(Lures)
  Routine detec_repe
    TextComponent text_5
      letterHeight = 0.07
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      text = Have you seen a repeated word?
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    TextComponent arrows
      letterHeight = 0.07
      pos = [0,-0.3]
      startVal [time (s)] = 0.0
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      text:
        YES                               NO
        <—                                —>
    KeyboardComponent key_resp_7
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine confidence_answer
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        refined_response = 'Your answer:  '
        confi='_'
      Each Frame:
        L=event.getKeys()
        if len(L):
            for i in L:
                if i in ['1','2','3','4','5','6']:
                    confi=i
                    refined_response =  refined_response + i
                elif i=='return':
                    continueRoutine=False
    TextComponent text_6
      letterHeight = 0.07
      pos = [0,0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        How confident are you that your previous answer is correct?

          1   2   3   4   5   6
        Not                  Very
        sure                 sure
    TextComponent text_4
      letterHeight = 0.1
      pos = [0,-0.3]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every frame] = $refined_response
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    CodeComponent code_18
      Code Type = JS
      Begin JS Experiment:
        psychoJS.experiment.addData("confidence", refined_response);
        psychoJS.experiment.addData("first_rep", tar_pos);
      End JS Routine:
        psychoJS.experiment.addData("confiden", confi);
        psychoJS.experiment.addData("first_rep", init);
        psychoJS.experiment.addData("last_rep", tar_pos);
        psychoJS.experiment.addData("items", rsvp_list);
        psychoJS.experiment.addData("PROBE", probe);
        psychoJS.experiment.addData("TARGET", text);
  Routine target_loop
    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        exp_critical.append(Critical_word)
  Routine fillers_routine
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        fillers.append(Word)
      End Routine:
        first=0
        counterBlock=0
  Routine screen_scale
    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            text_bottom.text='X Scale = '+str(x_scale)+unittext+' per cm, Y Scale = '+str(y_scale)+unittext+' per cm\nScreen height = '+str(screen_height)+' cm\n\nPress the space bar when done'
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ***SCREEN CALIBRATION***

        Resize this image to match the size of a credit card
        Up and down arrow keys adjust height
        Left and right arrow keys adjust width
    TextComponent text_bottom
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the space bar when done
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    ImageComponent ccimage
      image = bank-1300155_640.png
      saveStartStop = False
      size [set every frame] = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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    CodeComponent code_refresh_rate
      Code Type = JS
      disabled = True
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      Begin JS Experiment:
        window.refreshCount = 0;
        window.refreshStart = null;
        window.refreshFinish = null;
      Each JS Frame:
        if (window.refreshStart === null) {
            window.refreshStart = window.performance.now();
         } else {
            window.refreshFinish = window.performance.now();
            window.refreshCount++;
         }
      End JS Routine:
        refreshrate=((window.refreshFinish - window.refreshStart) / window.refreshCount);
  Routine items_pract
    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Routine:
        pract_critical.append(pr_critical)
  Routine end_block_3
    CodeComponent code_24
      Code Type = Auto->JS
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      Begin Routine:
        if counterBlock==0:

            endBlock='WELL DONE!!\n\n\
            THIS IS THE END OF THE PRACTICE.\n\n\
            Press SPACE to continue with the experiment'
        else:
            endBlock='WELL DONE!!\n\n\
            THIS IS THE END OF THE EXPERIMENT.\n\
            MANY THANKS FOR YOUR CONTRIBUTION\n\n\
            For the Debrief Sheet please contact Yin at YXL925@student.bham.ac.uk or Ihssan at IXF819@student.bham.ac.uk\n\n\
            Press SPACE to end the experiment'
      End Routine:
        counterBlock+=1
    TextComponent text_endblock
      letterHeight [set every repeat] = 0.7*y_scale
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $endBlock
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    KeyboardComponent key_resp_9
      allowedKeys = 'right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine init_block
    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Experiment:
        counterBlock = 0
      Begin Routine:
        lures_count = 0
        critical_count = 0
        first = 0
        if counterBlock==0:
            critical=pract_critical
            lures=pract_lures
        else:
            critical = exp_critical
            lures = exp_lures
  Routine load_critical_pract
    CodeComponent code_26
      Code Type = Auto->JS
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      Begin Routine:
        pract_critical.append(pr_critical)
  Routine load_lures_pract
  Routine load_lures_new
    CodeComponent code_27
      Code Type = Auto->JS
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      Begin Routine:
        pract_lures.append(pr_lures)
  Routine question
    TextComponent Recog_text
      color = black
      letterHeight = 0.5
      pos = [0,3]
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
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      text:
        What letter did you see?

        Please type only the letter and nothing else
    TextboxComponent textbox
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.5
      size = (2,2)
      startVal [time (s)] = 0.0
      units = deg
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    CodeComponent code_30
      Code Type = Auto->JS
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      End Routine:
        probe = Critical
        pptResponse = textbox.text
        if pptResponse.upper() == probe:
            pptAns = 1
        else:
            pptAns = 0

        trials_template.addData('target', probe)
        trials_template.addData('correct', pptAns)
    TextComponent click_text
      color = black
      letterHeight [set every repeat] = 0.5
      pos = [0,-3]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = click here to continue
      units = deg
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    PolygonComponent click
      fillColor = none
      lineColor = none
      opacity = 0
      pos = (0, -3)
      saveStartStop = False
      shape = rectangle
      size = (12, 2)
      startVal [time (s)] = 0.0
      units = deg
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    MouseComponent mouse
      clickable = click
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instruc_practise_2
    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Routine:
        instructions_2 = "The letters and numbers presented in the streams will vary in size from trial to trial. We expect there to be trials in which you cannot recognise the letter in the stream. \n\nThis experiment consists of two parts. In the first part, we will ask you to cover your RIGHT eye, so that you are looking through your LEFT eye. Vice versa for the second part. If you wish to leave the experiment at any point, please communicate this to the experimenter.\n\nOnce you have read and understood these instructions please press 'ENTER' to continue."
    TextComponent text_instructions2
      color = black
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_2
      units = deg
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    KeyboardComponent key_resp_5
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instruc_trial
    TextComponent ENTER_2
      color = black
      letterHeight [set every repeat] = 0.5
      pos = [0,-0.3]
      saveStartStop = False
      startVal [time (s)] = 0
      text = Press SPACE BAR when ready
      units = deg
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine instruc_block
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        new_block_text = "This is the start of a new block."
    TextComponent text_start_blocks
      color = black
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3
      text = $new_block_text
      units = deg
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  Routine correct
    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        total=sum(response)
        if total==0:
            blocks.finished = True
  Routine end
    TextComponent text
      letterHeight = y_scale
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4
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      text:
        That is the end of the experiment!

        Thanks for taking part.
  Routine end_early
    CodeComponent code_28
      Code Type = Auto->JS
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      Begin Experiment:
        correctCount = 0
      Begin Routine:
        if corrAns == 1:
            correctCount += 1

        if nblocks > 2 and (corrAns / nblocks) < 2:
            trials.finished = True
            blocks.finished = True
  Routine block_prep
    CodeComponent code_29
      Code Type = Auto->JS
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      Begin Routine:
        response = []
  Routine eyesight
    TextComponent eyesight_text
      color = black
      letterHeight = 0.75*y_scale
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this experiment we will be testing your uncorrected vision. If you have glasses, please DO NOT WEAR THEM for the duration of this experiment.

        If you know your prescription, please enter it below (if you do not wear glasses, please enter 'n/a'). Include a symbol showing whether you are nearsighted '-' or farsighted '+'. If you do not know your prescription, leave this field blank.
    TextComponent right_eye_text
      color = black
      letterHeight = 0.75*y_scale
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Your right eye prescription:
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    TextboxComponent right_eye
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.75*y_scale
      saveStartStop = False
      size = (4*y_scale, 2*y_scale)
      startVal [time (s)] = 0.0
      text = 0
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    TextComponent left_eye_text
      color = black
      letterHeight = 0.75*y_scale
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = and your left eye presciption:
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    TextboxComponent left_eye
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.75*y_scale
      padding = 0.01*y_scale
      pos = (0, -0.2)
      saveStartStop = False
      size = (4*y_scale, 2*y_scale)
      startVal [time (s)] = 0.0
      text = 0
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    TextComponent text_finish
      color = black
      letterHeight = 1*y_scale
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here when you are ready to begin the experiment.
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    PolygonComponent click_finish
      fillColor = none
      lineColor = none
      opacity = 0
      pos = (0, -0.4)
      saveStartStop = False
      shape = rectangle
      size = (y_scale*20, y_scale*2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = click_finish
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 1.0
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  Routine instruc_start_exp
    TextComponent text_repeat
      color = black
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $instruc_repeat
      units = deg
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    KeyboardComponent key_resp_8
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine update_repeat
    CodeComponent code_31
      Code Type = Auto->JS
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      Begin Routine:
        numRepeat += 1
  Routine set_variables
    CodeComponent code_32
      Code Type = Auto->JS
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      Begin Experiment:
        instruc_repeat = 'This is the first part of the visual acuity test. Please cover your RIGHT eye with your hand so that you are looking through your LEFT eye only.\n\n Press ENTER when you are ready to continue.'
      Begin Routine:
        previous_target_letter = 'A'
  Routine changeVars
    CodeComponent code_22
      Code Type = Auto->JS
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      Begin Experiment:
        instruc_repeat = 'This is the second part of this visual acuity test. Please cover your LEFT eye with your hand so that you are looking through your RIGHT eye only.\n\n Press SPACE when you are ready to continue.'
  Routine set_instruc
    CodeComponent code_33
      Code Type = Auto->JS
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      End Routine:
        instruc_repeat = instruc_repeat

        if previous_target_letter != 'A':
            instruc_repeat = 'This is the second part of the visual acuity test. Please cover your LEFT eye with your hand so that you are looking through your RIGHT eye only.\n\n Press ENTER when you are ready to continue.'
  Routine complete_redirect
    CodeComponent code_34
      Code Type = JS
      End JS Routine:
        psychoJS.setRedirectUrls('https://bhampsychology.eu.qualtrics.com/jfe/form/SV_5nzIatV3prDhE10')
  Routine set_variables_template
    CodeComponent code_35
      Code Type = Auto->JS
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      Begin Experiment:
        previous_target_letter = 'A'
        instruc_repeat_template = 'This is the initial template generation part of this visual acuity test. Please cover your RIGHT eye with your hand so that you are looking through your LEFT eye only.\n\n Press ENTER when you are ready to continue.'
  Routine set_instruc_template
    CodeComponent code_36
      Code Type = Auto->JS
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      End Routine:
        instruc_repeat_template = instruc_repeat_template

        if previous_target_letter != 'A':
            instruc_repeat_template = 'This is the second part of the templating phase. Please cover your LEFT eye with your hand so that you are looking through your RIGHT eye only.\n\n Press ENTER when you are ready to continue.'
  Routine instruc_block_template
    CodeComponent code_37
      Code Type = Auto->JS
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      Begin Experiment:
        new_block_text = "This is the start of a new block."
    TextComponent text_2
      color = black
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3
      text = $new_block_text
      units = deg
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  Routine instruc_start_template
    TextComponent text_repeat_template
      color = black
      letterHeight = 0.5
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruc_repeat_template
      units = deg
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    KeyboardComponent key_resp_10
      allowedKeys = 'return'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine rsvp_setup_template
    CodeComponent code_38
      Code Type = Auto->JS
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      Begin Experiment:
        letters = ['C','D','H','K','N','F','R','S','V','Z']
      Begin Routine:
        length=15
        iNum = 0

        tar_pos=randint(6, 9)
        # fill stream with numbers
        rsvp_list=[]
        while len(rsvp_list) != length:
            iNum = randint(1,9)
            if not rsvp_list:
                rsvp_list.append(iNum)
            elif iNum != rsvp_list[-1]:
                rsvp_list.append(iNum)

        shuffle(letters)
        Critical = letters[0]
        while Critical == previous_target_letter:
            shuffle(letters)
            Critical = letters[0]
        previous_target_letter = Critical
        rsvp_list[tar_pos]=Critical
        rsvpSize = stimulus_size
        counterTrial = 0
Flow
  Routine loading_stimuli
  Routine instruc_practice
  Routine instruc_practise_2
  Routine set_variables_template
  LoopInitiator eyes_template loopType="TrialHandler"
    conditionsFile = eyes_template.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('eye', 'left')]),
      OrderedDict([('eye', 'right')])]
    Routine set_instruc_template
    Routine instruc_start_template
    Routine instruc_block_template
    LoopInitiator trials_template loopType="TrialHandler"
      conditions = [OrderedDict([('stimulus_size', 8.352)])]
      conditionsFile = conditions_template.csv
      loopType = sequential
      nReps = 1
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      Routine rsvp_setup_template
      Routine instruc_trial
      Routine fixation
      LoopInitiator template_loop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = length
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        Routine stream
      LoopTerminator template_loop
      Routine question
    LoopTerminator trials_template
  LoopTerminator eyes_template
  Routine set_variables
  LoopInitiator both_eyes loopType="TrialHandler"
    conditionsFile = eyes.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('eye', 'left')]),
      OrderedDict([('eye', 'right')])]
    Routine set_instruc
    Routine instruc_start_exp
    LoopInitiator blocks loopType="TrialHandler"
      conditionsFile = nblocks.csv
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('nblocks', 1)]),
        OrderedDict([('nblocks', 2)]),
        OrderedDict([('nblocks', 3)]),
        OrderedDict([('nblocks', 4)]),
        OrderedDict([('nblocks', 5)]),
        OrderedDict([('nblocks', 6)]),
        OrderedDict([('nblocks', 7)]),
        OrderedDict([('nblocks', 8)]),
        OrderedDict([('nblocks', 9)]),
        OrderedDict([('nblocks', 10)]),
        OrderedDict([('nblocks', 11)]),
        OrderedDict([('nblocks', 12)]),
        OrderedDict([('nblocks', 13)]),
        OrderedDict([('nblocks', 14)]),
        OrderedDict([('nblocks', 15)]),
        OrderedDict([('nblocks', 16)]),
        OrderedDict([('nblocks', 17)]),
        OrderedDict([('nblocks', 18)]),
        OrderedDict([('nblocks', 19)]),
        OrderedDict([('nblocks', 20)])]
      Routine instruc_block
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = conditions.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('stimulus_size', 8.352)]),
          OrderedDict([('stimulus_size', 6.506699907)]),
          OrderedDict([('stimulus_size', 5.069102451)]),
          OrderedDict([('stimulus_size', 3.949129364)]),
          OrderedDict([('stimulus_size', 3.076604366)]),
          OrderedDict([('stimulus_size', 2.396856003)]),
          OrderedDict([('stimulus_size', 1.867291994)]),
          OrderedDict([('stimulus_size', 1.454730441)]),
          OrderedDict([('stimulus_size', 1.133320692)]),
          OrderedDict([('stimulus_size', 0.882923568)]),
          OrderedDict([('stimulus_size', 0.687849461)]),
          OrderedDict([('stimulus_size', 0.535875242)]),
          OrderedDict([('stimulus_size', 0.417478375)])]
        Routine rsvp_setup
        Routine instruc_trial
        Routine fixation
        LoopInitiator rsvp_loop loopType="TrialHandler"
          isTrials = False
          loopType = sequential
          nReps = length
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          Routine stream
        LoopTerminator rsvp_loop
        Routine question
      LoopTerminator trials
    LoopTerminator blocks
  LoopTerminator both_eyes
